//   FILE :Ach_cascade.xml
//
// CREATED :  30th October 2002
//
// LAST MODIFIED : 5th April 2003
//
// AUTHOR :  Catherine Lloyd
//           Bioengineering Institute
//           The University of Auckland
//
// MODEL STATUS :  This model conforms to the CellML 1.0 Specification released on
// 10th August 2001, and the 16/01/2002 CellML Metadata 1.0 Specification.
//
// DESCRIPTION :  This file contains a CellML description of Wang and Lipsius's 1995 kinetic analysis of an acetylcholine induced signal transduction cascade resulting in ATP-sensitive K+ channel activation.
//
// CHANGES:
//   05/04/2003 - AAC - Changed the model name so the model loads in the database
//                      easier.
// creator: Family Lloyd; Given Catherine; Other May; c.lloyd@auckland.ac.nz; Orgname The University of Auckland; Orgunit The Bioengineering Institute
// created: W3CDTF 2002-10-30
// modification: Changed the model name so the model loads in the database easier.; Family Cuellar; Given Autumn; Other A; W3CDTF 2003-04-05
// publisher: The University of Auckland, Bioengineering Institute
// title: Wang and Lipsius's 1995 kinetic analysis of an acetylcholine induced signal transduction cascade resulting in ATP-sensitive K+ channel activation.
// comment: This is the CellML descripition of Wang and Lipsius's 1995 kinetic analysis of an acetylcholine induced signal transduction cascade resulting in ATP-sensitive K+ channel activation.; FN Catherine Lloyd
// reference: subject_type keyword; signal transduction
// reference: Pubmed_id 7641326; Family Wang; Given Yong Gao; Family Lipsius; Given Stephen; Other L; title beta-Adrenergic Stimulation Induces Acetylcholine to Activate ATP-Sensitive K+ Current in Cat Atrial Myocytes; W3CDTF 1995-09; title Circulation Research; volume 77; first_page 565; last_page 574
def model Ach_cascade_1995 as
  // The following RDF block contains metadata that applies to this document
  // as a whole, as indicated by the empty about attribute on the
  // <rdf:Description> element.
  // The Model Builder Metadata.  The Dublin Core "creator" element is used
  // to indicate the person who translated the model into CellML.
  // The Creation Date metadata. This is the date on which the model
  // was translated into CellML.
  // The Modification History metadata. This lists the changes that have been
  // made to the document, who made the changes, and when they were made.
  // The Publisher metadata.
  // The following metadata refers to the model itself, as indicated by the
  // reference to the ID "Ach_cascade", which is declared on the
  // <model> element.
  // A human readable name for the model.
  // A comment regarding the model.
  // The creator of the comment.
  // Keyword(s)
  //
  // The CellML Metadata Specification recommends that bibliographic metadata
  // is used to provide information about the original model reference.  The
  // "identifier" attribute on the "BibliographicReference" class provides an
  // elegant way to identify a cited reference using a database identifier
  // such as Pubmed.  All associated data such as author, journal title,
  // date, etc can be looked up on the database.
  // Below, we define some additional units for association with variables and
  // constants within the model. The identifiers are fairly self-explanatory.
  def unit micromolar as
    unit mole {pref: micro};
    unit litre {expo: -1};
  enddef;
  def unit flux as
    unit micromolar {expo: 1};
    unit second {expo: -1};
  enddef;
  def unit first_order_rate_constant as
    unit second {expo: -1};
  enddef;
  def unit second_order_rate_constant as
    unit micromolar {expo: -1};
    unit second {expo: -1};
  enddef;
  // The "environment" component is used to declare variables that are used by
  // all or most of the other components, in this case just "time".

  def comp environment as
    var time: second {pub: out};
  enddef;
  // The following components describe all the reactants, products, enzymes,
  // activators and inhibitors involved in the reactions.

  def comp ACh1 as
    var ACh1: micromolar {pub: out, init: 1.0};
    var delta_ACh1_rxn0: flux {pub: in};
    var time: second {pub: in};
    ode(ACh1, time) = delta_ACh1_rxn0;
  enddef;

  def comp ACh2 as
    var ACh2: micromolar {pub: out, init: 1.0};
    var delta_ACh2_rxn5: flux {pub: in};
    var time: second {pub: in};
    ode(ACh2, time) = delta_ACh2_rxn5;
  enddef;

  def comp M1 as
    var M1: micromolar {pub: out, init: 1.0};
    var delta_M1_rxn5: flux {pub: in};
    var time: second {pub: in};
    ode(M1, time) = delta_M1_rxn5;
  enddef;

  def comp M2 as
    var M2: micromolar {pub: out, init: 1.0};
    var delta_M2_rxn0: flux {pub: in};
    var time: second {pub: in};
    ode(M2, time) = delta_M2_rxn0;
  enddef;

  def comp M1_ACh2_complex as
    var M1_ACh2_complex: micromolar {pub: out, init: 1.0};
    var delta_M1_ACh2_complex_rxn5: flux {pub: in};
    var time: second {pub: in};
    ode(M1_ACh2_complex, time) = delta_M1_ACh2_complex_rxn5;
  enddef;

  def comp M2_ACh1_complex as
    var M2_ACh1_complex: micromolar {pub: out, init: 1.0};
    var delta_M2_ACh1_complex_rxn0: flux {pub: in};
    var time: second {pub: in};
    ode(M2_ACh1_complex, time) = delta_M2_ACh1_complex_rxn0;
  enddef;

  def comp inactive_Gi_protein as
    var inactive_Gi_protein: micromolar {pub: out, init: 1.0};
    var delta_inactive_Gi_protein_rxn1: flux {pub: in};
    var time: second {pub: in};
    ode(inactive_Gi_protein, time) = delta_inactive_Gi_protein_rxn1;
  enddef;

  def comp active_Gi_protein as
    var active_Gi_protein: micromolar {pub: out, init: 1.0};
    var delta_active_Gi_protein_rxn1: flux {pub: in};
    var time: second {pub: in};
    ode(active_Gi_protein, time) = delta_active_Gi_protein_rxn1;
  enddef;

  def comp inactive_ACh_sensitive_K_channel as
    var inactive_ACh_sensitive_K_channel: micromolar {pub: out, init: 1.0};
    var delta_inactive_ACh_sensitive_K_channel_rxn3: flux {pub: in};
    var time: second {pub: in};
    ode(inactive_ACh_sensitive_K_channel, time) = delta_inactive_ACh_sensitive_K_channel_rxn3;
  enddef;

  def comp active_ACh_sensitive_K_channel as
    var active_ACh_sensitive_K_channel: micromolar {pub: out, init: 1.0};
    var delta_active_ACh_sensitive_K_channel_rxn3: flux {pub: in};
    var time: second {pub: in};
    ode(active_ACh_sensitive_K_channel, time) = delta_active_ACh_sensitive_K_channel_rxn3;
  enddef;

  def comp inactive_Gq_protein as
    var inactive_Gq_protein: micromolar {pub: out, init: 1.0};
    var delta_inactive_Gq_protein_rxn6: flux {pub: in};
    var time: second {pub: in};
    ode(inactive_Gq_protein, time) = delta_inactive_Gq_protein_rxn6;
  enddef;

  def comp active_Gq_protein as
    var active_Gq_protein: micromolar {pub: out, init: 1.0};
    var delta_active_Gq_protein_rxn6: flux {pub: in};
    var time: second {pub: in};
    ode(active_Gq_protein, time) = delta_active_Gq_protein_rxn6;
  enddef;

  def comp inactive_PLC as
    var inactive_PLC: micromolar {pub: out, init: 1.0};
    var delta_inactive_PLC_rxn8: flux {pub: in};
    var time: second {pub: in};
    ode(inactive_PLC, time) = delta_inactive_PLC_rxn8;
  enddef;

  def comp active_PLC as
    var active_PLC: micromolar {pub: out, init: 1.0};
    var delta_active_PLC_rxn8: flux {pub: in};
    var time: second {pub: in};
    ode(active_PLC, time) = delta_active_PLC_rxn8;
  enddef;

  def comp PIP2 as
    var PIP2: micromolar {pub: out, init: 1.0};
    var delta_PIP2_rxn10: flux {pub: in};
    var time: second {pub: in};
    ode(PIP2, time) = delta_PIP2_rxn10;
  enddef;

  def comp DAG as
    var DAG: micromolar {pub: out, init: 1.0};
    var delta_DAG_rxn10: flux {pub: in};
    var time: second {pub: in};
    ode(DAG, time) = delta_DAG_rxn10;
  enddef;

  def comp IP3 as
    var IP3: micromolar {pub: out, init: 1.0};
    var delta_IP3_rxn10: flux {pub: in};
    var time: second {pub: in};
    ode(IP3, time) = delta_IP3_rxn10;
  enddef;

  def comp inactive_PKC as
    var inactive_PKC: micromolar {pub: out, init: 1.0};
    var delta_inactive_PKC_rxn11: flux {pub: in};
    var time: second {pub: in};
    ode(inactive_PKC, time) = delta_inactive_PKC_rxn11;
  enddef;

  def comp active_PKC as
    var active_PKC: micromolar {pub: out, init: 1.0};
    var delta_active_PKC_rxn11: flux {pub: in};
    var time: second {pub: in};
    ode(active_PKC, time) = delta_active_PKC_rxn11;
  enddef;

  def comp inactive_ER_Ca_channel as
    var inactive_ER_Ca_channel: micromolar {pub: out, init: 1.0};
    var delta_inactive_ER_Ca_channel_rxn13: flux {pub: in};
    var time: second {pub: in};
    ode(inactive_ER_Ca_channel, time) = delta_inactive_ER_Ca_channel_rxn13;
  enddef;

  def comp active_ER_Ca_channel as
    var active_ER_Ca_channel: micromolar {pub: out, init: 1.0};
    var delta_active_ER_Ca_channel_rxn13: flux {pub: in};
    var time: second {pub: in};
    ode(active_ER_Ca_channel, time) = delta_active_ER_Ca_channel_rxn13;
  enddef;

  def comp ER_Ca as
    var ER_Ca: micromolar {pub: out, init: 1.0};
    var delta_ER_Ca_rxn15: flux {pub: in};
    var time: second {pub: in};
    ode(ER_Ca, time) = delta_ER_Ca_rxn15;
  enddef;

  def comp Ca_i as
    var Ca_i: micromolar {pub: out, init: 1.0};
    var delta_Ca_i_rxn15: flux {pub: in};
    var time: second {pub: in};
    ode(Ca_i, time) = delta_Ca_i_rxn15;
  enddef;

  def comp P as
    var P: micromolar {pub: out, init: 1.0};
    var delta_P_rxn18: flux {pub: in};
    var time: second {pub: in};
    ode(P, time) = delta_P_rxn18;
  enddef;

  def comp ATP_sensitive_K_channel as
    var ATP_sensitive_K_channel: micromolar {pub: out, init: 1.0};
    var delta_ATP_sensitive_K_channel_rxn18: flux {pub: in};
    var time: second {pub: in};
    ode(ATP_sensitive_K_channel, time) = delta_ATP_sensitive_K_channel_rxn18;
  enddef;

  def comp Phosphorylated_ATP_sensitive_K_channel as
    var Phosphorylated_ATP_sensitive_K_channel: micromolar {pub: out, init: 1.0};
    var delta_Phosphorylated_ATP_sensitive_K_channel_rxn18: flux {pub: in};
    var time: second {pub: in};
    ode(Phosphorylated_ATP_sensitive_K_channel, time) = delta_Phosphorylated_ATP_sensitive_K_channel_rxn18;
  enddef;

  def comp K_i as
    var K_i: micromolar {pub: out, init: 1.0};
    var delta_K_i_rxn19: flux {pub: in};
    var time: second {pub: in};
    ode(K_i, time) = delta_K_i_rxn19;
  enddef;

  def comp K_e as
    var K_e: micromolar {pub: out, init: 1.0};
    var delta_K_e_rxn19: flux {pub: in};
    var time: second {pub: in};
    ode(K_e, time) = delta_K_e_rxn19;
  enddef;
  // The following components describe the reactions of the model.

  def comp reaction0 as
    var ACh1: micromolar {pub: in};
    var M2: micromolar {pub: in};
    var M2_ACh1_complex: micromolar {pub: in};
    var delta_ACh1_rxn0: flux {pub: out};
    var delta_M2_rxn0: flux {pub: out};
    var delta_M2_ACh1_complex_rxn0: flux {pub: out};
    var k0: second_order_rate_constant {init: 1.0};
    var rate: flux;
    reaction {reversible: no}
      variable_ref {variable: ACh1}
        role {role: reactant, delta_variable: delta_ACh1_rxn0, stoichiometry: 1}
      variable_ref {variable: M2}
        role {role: reactant, delta_variable: delta_M2_rxn0, stoichiometry: 1}
      variable_ref {variable: M2_ACh1_complex}
        role {role: product, delta_variable: delta_M2_ACh1_complex_rxn0, stoichiometry: 1}
      variable_ref {variable: rate}
        role {role: rate}
          rate = k0*ACh1*M2;
  enddef;

  def comp reaction1 as
    var inactive_Gi_protein: micromolar {pub: in};
    var active_Gi_protein: micromolar {pub: in};
    var M2_ACh1_complex: micromolar {pub: in};
    var delta_inactive_Gi_protein_rxn1: flux {pub: out};
    var delta_active_Gi_protein_rxn1: flux {pub: out};
    var k1: first_order_rate_constant {init: 1.0};
    var vmax1: flux {init: 1.0};
    var km1: micromolar {init: 1.0};
    var rate: flux;
    reaction {reversible: no}
      variable_ref {variable: inactive_Gi_protein}
        role {role: reactant, delta_variable: delta_inactive_Gi_protein_rxn1, stoichiometry: 1}
      variable_ref {variable: active_Gi_protein}
        role {role: product, delta_variable: delta_active_Gi_protein_rxn1, stoichiometry: 1}
      variable_ref {variable: M2_ACh1_complex}
        role {role: activator}
      variable_ref {variable: rate}
        role {role: rate}
          rate = k1*inactive_Gi_protein*(1.0{dimensionless}+(vmax1-1.0{dimensionless})*(1.0{dimensionless}-exp(-(M2_ACh1_complex/km1))));
  enddef;

  def comp reaction3 as
    var inactive_ACh_sensitive_K_channel: micromolar {pub: in};
    var active_ACh_sensitive_K_channel: micromolar {pub: in};
    var active_Gi_protein: micromolar {pub: in};
    var delta_inactive_ACh_sensitive_K_channel_rxn3: flux {pub: out};
    var delta_active_ACh_sensitive_K_channel_rxn3: flux {pub: out};
    var k3: first_order_rate_constant {init: 1.0};
    var vmax3: flux {init: 1.0};
    var km3: micromolar {init: 1.0};
    var rate: flux;
    reaction {reversible: no}
      variable_ref {variable: inactive_ACh_sensitive_K_channel}
        role {role: reactant, delta_variable: delta_inactive_ACh_sensitive_K_channel_rxn3, stoichiometry: 1}
      variable_ref {variable: active_ACh_sensitive_K_channel}
        role {role: product, delta_variable: delta_active_ACh_sensitive_K_channel_rxn3, stoichiometry: 1}
      variable_ref {variable: active_Gi_protein}
        role {role: activator}
      variable_ref {variable: rate}
        role {role: rate}
          rate = k3*inactive_ACh_sensitive_K_channel*(1.0{dimensionless}+(vmax3-1.0{dimensionless})*(1.0{dimensionless}-exp(-(active_Gi_protein/km3))));
  enddef;

  def comp reaction5 as
    var ACh2: micromolar {pub: in};
    var M1: micromolar {pub: in};
    var M1_ACh2_complex: micromolar {pub: in};
    var delta_ACh2_rxn5: flux {pub: out};
    var delta_M1_rxn5: flux {pub: out};
    var delta_M1_ACh2_complex_rxn5: flux {pub: out};
    var k5: second_order_rate_constant {init: 1.0};
    var rate: flux;
    reaction {reversible: no}
      variable_ref {variable: ACh2}
        role {role: reactant, delta_variable: delta_ACh2_rxn5, stoichiometry: 1}
      variable_ref {variable: M1}
        role {role: reactant, delta_variable: delta_M1_rxn5, stoichiometry: 1}
      variable_ref {variable: M1_ACh2_complex}
        role {role: product, delta_variable: delta_M1_ACh2_complex_rxn5, stoichiometry: 1}
      variable_ref {variable: rate}
        role {role: rate}
          rate = k5*ACh2*M1;
  enddef;

  def comp reaction6 as
    var inactive_Gq_protein: micromolar {pub: in};
    var active_Gq_protein: micromolar {pub: in};
    var M1_ACh2_complex: micromolar {pub: in};
    var delta_inactive_Gq_protein_rxn6: flux {pub: out};
    var delta_active_Gq_protein_rxn6: flux {pub: out};
    var k6: first_order_rate_constant {init: 1.0};
    var vmax6: flux {init: 1.0};
    var km6: micromolar {init: 1.0};
    var rate: flux;
    reaction {reversible: no}
      variable_ref {variable: inactive_Gq_protein}
        role {role: reactant, delta_variable: delta_inactive_Gq_protein_rxn6, stoichiometry: 1}
      variable_ref {variable: active_Gq_protein}
        role {role: product, delta_variable: delta_active_Gq_protein_rxn6, stoichiometry: 1}
      variable_ref {variable: M1_ACh2_complex}
        role {role: activator}
      variable_ref {variable: rate}
        role {role: rate}
          rate = k6*inactive_Gq_protein*(1.0{dimensionless}+(vmax6-1.0{dimensionless})*(1.0{dimensionless}-exp(-(M1_ACh2_complex/km6))));
  enddef;

  def comp reaction8 as
    var inactive_PLC: micromolar {pub: in};
    var active_PLC: micromolar {pub: in};
    var active_Gq_protein: micromolar {pub: in};
    var delta_inactive_PLC_rxn8: flux {pub: out};
    var delta_active_PLC_rxn8: flux {pub: out};
    var k8: first_order_rate_constant {init: 1.0};
    var km8: micromolar {init: 1.0};
    var vmax8: flux {init: 1.0};
    var rate: flux;
    reaction {reversible: no}
      variable_ref {variable: inactive_PLC}
        role {role: reactant, delta_variable: delta_inactive_PLC_rxn8, stoichiometry: 1}
      variable_ref {variable: active_PLC}
        role {role: product, delta_variable: delta_active_PLC_rxn8, stoichiometry: 1}
      variable_ref {variable: active_Gq_protein}
        role {role: activator}
      variable_ref {variable: rate}
        role {role: rate}
          rate = k8*inactive_PLC*(1.0{dimensionless}+(vmax8-1.0{dimensionless})*(1.0{dimensionless}-exp(-(active_Gq_protein/km8))));
  enddef;

  def comp reaction10 as
    var PIP2: micromolar {pub: in};
    var DAG: micromolar {pub: in};
    var IP3: micromolar {pub: in};
    var active_PLC: micromolar {pub: in};
    var delta_PIP2_rxn10: flux {pub: out};
    var delta_DAG_rxn10: flux {pub: out};
    var delta_IP3_rxn10: flux {pub: out};
    var km10: micromolar {init: 1.0};
    var vmax10: flux {init: 1.0};
    var rate: flux;
    reaction {reversible: no}
      variable_ref {variable: PIP2}
        role {role: reactant, delta_variable: delta_PIP2_rxn10, stoichiometry: 1}
      variable_ref {variable: DAG}
        role {role: product, delta_variable: delta_DAG_rxn10, stoichiometry: 1}
      variable_ref {variable: IP3}
        role {role: product, delta_variable: delta_IP3_rxn10, stoichiometry: 1}
      variable_ref {variable: active_PLC}
        role {role: catalyst}
      variable_ref {variable: rate}
        role {role: rate}
          rate = PIP2*vmax10/(km10+PIP2);
  enddef;

  def comp reaction11 as
    var inactive_PKC: micromolar {pub: in};
    var active_PKC: micromolar {pub: in};
    var DAG: micromolar {pub: in};
    var Ca_i: micromolar {pub: in};
    var delta_inactive_PKC_rxn11: flux {pub: out};
    var delta_active_PKC_rxn11: flux {pub: out};
    var k11: first_order_rate_constant {init: 1.0};
    var vmax11a: flux {init: 1.0};
    var km11a: micromolar {init: 1.0};
    var vmax11b: flux {init: 1.0};
    var km11b: micromolar {init: 1.0};
    var rate: flux;
    reaction {reversible: no}
      variable_ref {variable: inactive_PKC}
        role {role: reactant, delta_variable: delta_inactive_PKC_rxn11, stoichiometry: 1}
      variable_ref {variable: active_PKC}
        role {role: product, delta_variable: delta_active_PKC_rxn11, stoichiometry: 1}
      variable_ref {variable: DAG}
        role {role: activator}
      variable_ref {variable: Ca_i}
        role {role: activator}
      variable_ref {variable: rate}
        role {role: rate}
          rate = k11*inactive_PKC*(1.0{dimensionless}+(vmax11a-1.0{dimensionless})*(1.0{dimensionless}-exp(-(DAG/km11a))))*(1.0{dimensionless}+(vmax11b-1.0{dimensionless})*(1.0{dimensionless}-exp(-(Ca_i/km11b))));
  enddef;

  def comp reaction13 as
    var inactive_ER_Ca_channel: micromolar {pub: in};
    var active_ER_Ca_channel: micromolar {pub: in};
    var IP3: micromolar {pub: in};
    var delta_inactive_ER_Ca_channel_rxn13: flux {pub: out};
    var delta_active_ER_Ca_channel_rxn13: flux {pub: out};
    var k13: first_order_rate_constant {init: 1.0};
    var vmax13: flux {init: 1.0};
    var km13: micromolar {init: 1.0};
    var rate: flux;
    reaction {reversible: no}
      variable_ref {variable: inactive_ER_Ca_channel}
        role {role: reactant, delta_variable: delta_inactive_ER_Ca_channel_rxn13, stoichiometry: 1}
      variable_ref {variable: active_ER_Ca_channel}
        role {role: product, delta_variable: delta_active_ER_Ca_channel_rxn13, stoichiometry: 1}
      variable_ref {variable: IP3}
        role {role: activator}
      variable_ref {variable: rate}
        role {role: rate}
          rate = k13*inactive_ER_Ca_channel*(1.0{dimensionless}+(vmax13-1.0{dimensionless})*(1.0{dimensionless}-exp(-(IP3/km13))));
  enddef;

  def comp reaction15 as
    var ER_Ca: micromolar {pub: in};
    var Ca_i: micromolar {pub: in};
    var active_ER_Ca_channel: micromolar {pub: in};
    var delta_ER_Ca_rxn15: flux {pub: out};
    var delta_Ca_i_rxn15: flux {pub: out};
    var k15: first_order_rate_constant {init: 1.0};
    var vmax15: flux {init: 1.0};
    var km15: micromolar {init: 1.0};
    var rate: flux;
    reaction {reversible: no}
      variable_ref {variable: ER_Ca}
        role {role: reactant, delta_variable: delta_ER_Ca_rxn15, stoichiometry: 1}
      variable_ref {variable: Ca_i}
        role {role: product, delta_variable: delta_Ca_i_rxn15, stoichiometry: 1}
      variable_ref {variable: active_ER_Ca_channel}
        role {role: activator}
      variable_ref {variable: rate}
        role {role: rate}
          rate = k15*ER_Ca*(1.0{dimensionless}+(vmax15-1.0{dimensionless})*(1.0{dimensionless}-exp(-(active_ER_Ca_channel/km15))));
  enddef;

  def comp reaction18 as
    var ATP_sensitive_K_channel: micromolar {pub: in};
    var P: micromolar {pub: in};
    var Phosphorylated_ATP_sensitive_K_channel: micromolar {pub: in};
    var active_PKC: micromolar {pub: in};
    var delta_ATP_sensitive_K_channel_rxn18: flux {pub: out};
    var delta_Phosphorylated_ATP_sensitive_K_channel_rxn18: flux {pub: out};
    var delta_P_rxn18: flux {pub: out};
    var km18: micromolar {init: 1.0};
    var vmax18: flux {init: 1.0};
    var rate: flux;
    reaction {reversible: no}
      variable_ref {variable: ATP_sensitive_K_channel}
        role {role: reactant, delta_variable: delta_ATP_sensitive_K_channel_rxn18, stoichiometry: 1}
      variable_ref {variable: P}
        role {role: reactant, delta_variable: delta_P_rxn18, stoichiometry: 1}
      variable_ref {variable: Phosphorylated_ATP_sensitive_K_channel}
        role {role: product, delta_variable: delta_Phosphorylated_ATP_sensitive_K_channel_rxn18, stoichiometry: 1}
      variable_ref {variable: active_PKC}
        role {role: catalyst}
      variable_ref {variable: rate}
        role {role: rate}
          rate = ATP_sensitive_K_channel*P*vmax18/(km18+ATP_sensitive_K_channel+P);
  enddef;

  def comp reaction19 as
    var K_i: micromolar {pub: in};
    var K_e: micromolar {pub: in};
    var active_ACh_sensitive_K_channel: micromolar {pub: in};
    var Phosphorylated_ATP_sensitive_K_channel: micromolar {pub: in};
    var delta_K_i_rxn19: flux {pub: out};
    var delta_K_e_rxn19: flux {pub: out};
    var k19: first_order_rate_constant {init: 1.0};
    var vmax19a: flux {init: 1.0};
    var km19a: micromolar {init: 1.0};
    var vmax19b: flux {init: 1.0};
    var km19b: micromolar {init: 1.0};
    var rate: flux;
    reaction {reversible: no}
      variable_ref {variable: K_i}
        role {role: reactant, delta_variable: delta_K_i_rxn19, stoichiometry: 1}
      variable_ref {variable: K_e}
        role {role: product, delta_variable: delta_K_e_rxn19, stoichiometry: 1}
      variable_ref {variable: Phosphorylated_ATP_sensitive_K_channel}
        role {role: activator}
      variable_ref {variable: active_ACh_sensitive_K_channel}
        role {role: activator}
      variable_ref {variable: rate}
        role {role: rate}
          rate = k19*K_i*(1.0{dimensionless}+(vmax19a-1.0{dimensionless})*(1.0{dimensionless}-exp(-(Phosphorylated_ATP_sensitive_K_channel/km19a))))*(1.0{dimensionless}+(vmax19b-1.0{dimensionless})*(1.0{dimensionless}-exp(-(active_ACh_sensitive_K_channel/km19b))));
  enddef;
  def map between ACh1 and reaction0 for
    vars ACh1 and ACh1;
    vars delta_ACh1_rxn0 and delta_ACh1_rxn0;
  enddef;
  def map between ACh2 and reaction5 for
    vars ACh2 and ACh2;
    vars delta_ACh2_rxn5 and delta_ACh2_rxn5;
  enddef;
  def map between M1 and reaction5 for
    vars M1 and M1;
    vars delta_M1_rxn5 and delta_M1_rxn5;
  enddef;
  def map between M2 and reaction0 for
    vars M2 and M2;
    vars delta_M2_rxn0 and delta_M2_rxn0;
  enddef;
  def map between M1_ACh2_complex and reaction5 for
    vars M1_ACh2_complex and M1_ACh2_complex;
    vars delta_M1_ACh2_complex_rxn5 and delta_M1_ACh2_complex_rxn5;
  enddef;
  def map between M1_ACh2_complex and reaction6 for
    vars M1_ACh2_complex and M1_ACh2_complex;
  enddef;
  def map between M2_ACh1_complex and reaction0 for
    vars M2_ACh1_complex and M2_ACh1_complex;
    vars delta_M2_ACh1_complex_rxn0 and delta_M2_ACh1_complex_rxn0;
  enddef;
  def map between M2_ACh1_complex and reaction1 for
    vars M2_ACh1_complex and M2_ACh1_complex;
  enddef;
  def map between inactive_Gi_protein and reaction1 for
    vars inactive_Gi_protein and inactive_Gi_protein;
    vars delta_inactive_Gi_protein_rxn1 and delta_inactive_Gi_protein_rxn1;
  enddef;
  def map between active_Gi_protein and reaction1 for
    vars active_Gi_protein and active_Gi_protein;
    vars delta_active_Gi_protein_rxn1 and delta_active_Gi_protein_rxn1;
  enddef;
  def map between active_Gi_protein and reaction3 for
    vars active_Gi_protein and active_Gi_protein;
  enddef;
  def map between inactive_ACh_sensitive_K_channel and reaction3 for
    vars inactive_ACh_sensitive_K_channel and inactive_ACh_sensitive_K_channel;
    vars delta_inactive_ACh_sensitive_K_channel_rxn3 and delta_inactive_ACh_sensitive_K_channel_rxn3;
  enddef;
  def map between active_ACh_sensitive_K_channel and reaction3 for
    vars active_ACh_sensitive_K_channel and active_ACh_sensitive_K_channel;
    vars delta_active_ACh_sensitive_K_channel_rxn3 and delta_active_ACh_sensitive_K_channel_rxn3;
  enddef;
  def map between active_ACh_sensitive_K_channel and reaction19 for
    vars active_ACh_sensitive_K_channel and active_ACh_sensitive_K_channel;
  enddef;
  def map between inactive_Gq_protein and reaction6 for
    vars inactive_Gq_protein and inactive_Gq_protein;
    vars delta_inactive_Gq_protein_rxn6 and delta_inactive_Gq_protein_rxn6;
  enddef;
  def map between active_Gq_protein and reaction6 for
    vars active_Gq_protein and active_Gq_protein;
    vars delta_active_Gq_protein_rxn6 and delta_active_Gq_protein_rxn6;
  enddef;
  def map between active_Gq_protein and reaction8 for
    vars active_Gq_protein and active_Gq_protein;
  enddef;
  def map between inactive_PLC and reaction8 for
    vars inactive_PLC and inactive_PLC;
    vars delta_inactive_PLC_rxn8 and delta_inactive_PLC_rxn8;
  enddef;
  def map between active_PLC and reaction8 for
    vars active_PLC and active_PLC;
    vars delta_active_PLC_rxn8 and delta_active_PLC_rxn8;
  enddef;
  def map between active_PLC and reaction10 for
    vars active_PLC and active_PLC;
  enddef;
  def map between PIP2 and reaction10 for
    vars PIP2 and PIP2;
    vars delta_PIP2_rxn10 and delta_PIP2_rxn10;
  enddef;
  def map between DAG and reaction10 for
    vars DAG and DAG;
    vars delta_DAG_rxn10 and delta_DAG_rxn10;
  enddef;
  def map between DAG and reaction11 for
    vars DAG and DAG;
  enddef;
  def map between IP3 and reaction10 for
    vars IP3 and IP3;
    vars delta_IP3_rxn10 and delta_IP3_rxn10;
  enddef;
  def map between IP3 and reaction13 for
    vars IP3 and IP3;
  enddef;
  def map between inactive_PKC and reaction11 for
    vars inactive_PKC and inactive_PKC;
    vars delta_inactive_PKC_rxn11 and delta_inactive_PKC_rxn11;
  enddef;
  def map between active_PKC and reaction11 for
    vars active_PKC and active_PKC;
    vars delta_active_PKC_rxn11 and delta_active_PKC_rxn11;
  enddef;
  def map between active_PKC and reaction18 for
    vars active_PKC and active_PKC;
  enddef;
  def map between inactive_ER_Ca_channel and reaction13 for
    vars inactive_ER_Ca_channel and inactive_ER_Ca_channel;
    vars delta_inactive_ER_Ca_channel_rxn13 and delta_inactive_ER_Ca_channel_rxn13;
  enddef;
  def map between active_ER_Ca_channel and reaction13 for
    vars active_ER_Ca_channel and active_ER_Ca_channel;
    vars delta_active_ER_Ca_channel_rxn13 and delta_active_ER_Ca_channel_rxn13;
  enddef;
  def map between active_ER_Ca_channel and reaction15 for
    vars active_ER_Ca_channel and active_ER_Ca_channel;
  enddef;
  def map between ER_Ca and reaction15 for
    vars ER_Ca and ER_Ca;
    vars delta_ER_Ca_rxn15 and delta_ER_Ca_rxn15;
  enddef;
  def map between Ca_i and reaction15 for
    vars Ca_i and Ca_i;
    vars delta_Ca_i_rxn15 and delta_Ca_i_rxn15;
  enddef;
  def map between Ca_i and reaction11 for
    vars Ca_i and Ca_i;
  enddef;
  def map between ATP_sensitive_K_channel and reaction18 for
    vars ATP_sensitive_K_channel and ATP_sensitive_K_channel;
    vars delta_ATP_sensitive_K_channel_rxn18 and delta_ATP_sensitive_K_channel_rxn18;
  enddef;
  def map between P and reaction18 for
    vars P and P;
    vars delta_P_rxn18 and delta_P_rxn18;
  enddef;
  def map between Phosphorylated_ATP_sensitive_K_channel and reaction18 for
    vars Phosphorylated_ATP_sensitive_K_channel and Phosphorylated_ATP_sensitive_K_channel;
    vars delta_Phosphorylated_ATP_sensitive_K_channel_rxn18 and delta_Phosphorylated_ATP_sensitive_K_channel_rxn18;
  enddef;
  def map between Phosphorylated_ATP_sensitive_K_channel and reaction19 for
    vars Phosphorylated_ATP_sensitive_K_channel and Phosphorylated_ATP_sensitive_K_channel;
  enddef;
  def map between K_i and reaction19 for
    vars K_i and K_i;
    vars delta_K_i_rxn19 and delta_K_i_rxn19;
  enddef;
  def map between K_e and reaction19 for
    vars K_e and K_e;
    vars delta_K_e_rxn19 and delta_K_e_rxn19;
  enddef;
  def map between ACh1 and environment for
    vars time and time;
  enddef;
  def map between ACh2 and environment for
    vars time and time;
  enddef;
  def map between M1 and environment for
    vars time and time;
  enddef;
  def map between M2 and environment for
    vars time and time;
  enddef;
  def map between M1_ACh2_complex and environment for
    vars time and time;
  enddef;
  def map between M2_ACh1_complex and environment for
    vars time and time;
  enddef;
  def map between inactive_Gi_protein and environment for
    vars time and time;
  enddef;
  def map between active_Gi_protein and environment for
    vars time and time;
  enddef;
  def map between inactive_ACh_sensitive_K_channel and environment for
    vars time and time;
  enddef;
  def map between active_ACh_sensitive_K_channel and environment for
    vars time and time;
  enddef;
  def map between inactive_Gq_protein and environment for
    vars time and time;
  enddef;
  def map between active_Gq_protein and environment for
    vars time and time;
  enddef;
  def map between inactive_PLC and environment for
    vars time and time;
  enddef;
  def map between active_PLC and environment for
    vars time and time;
  enddef;
  def map between PIP2 and environment for
    vars time and time;
  enddef;
  def map between DAG and environment for
    vars time and time;
  enddef;
  def map between IP3 and environment for
    vars time and time;
  enddef;
  def map between inactive_PKC and environment for
    vars time and time;
  enddef;
  def map between active_PKC and environment for
    vars time and time;
  enddef;
  def map between inactive_ER_Ca_channel and environment for
    vars time and time;
  enddef;
  def map between active_ER_Ca_channel and environment for
    vars time and time;
  enddef;
  def map between ER_Ca and environment for
    vars time and time;
  enddef;
  def map between Ca_i and environment for
    vars time and time;
  enddef;
  def map between P and environment for
    vars time and time;
  enddef;
  def map between ATP_sensitive_K_channel and environment for
    vars time and time;
  enddef;
  def map between Phosphorylated_ATP_sensitive_K_channel and environment for
    vars time and time;
  enddef;
  def map between K_i and environment for
    vars time and time;
  enddef;
  def map between K_e and environment for
    vars time and time;
  enddef;
enddef;
