//   FILE :  glycolysis_pathway_1997.xml
//
// CREATED :  15th November 2001
//
// LAST MODIFIED : 19th July 2002
//
// AUTHOR :  Catherine Lloyd
//           Department of Engineering Science
//           The University of Auckland
//
// MODEL STATUS :  This model conforms to the CellML 1.0 Specification released on
// 10th August 2001, and the 16/01/2002 CellML Metadata 1.0 Specification.
//
// DESCRIPTION :  This file contains a CellML description of the metabolic pathway
// glycolysis in the yeast Saccharomyces cerevisiae based on a mathematical model
// from Rizzi et al (1997).
//
// CHANGES:
//   22/01/2002 - AAC - Updated metadata to conform to the 16/1/02 CellML Metadata
//                      1.0 Specification.
//   26/02/2002 - CML - Corrected r_influx and r_efflux equations.
//   19/07/2002 - CML - Added more metadata.
// creator: Family Lloyd; Given Catherine; Other May; c.lloyd@auckland.ac.nz; Orgname The University of Auckland; Orgunit The Bioengineering Research Group
// created: W3CDTF 2001-11-15
// modification: Corrected r_influx and r_efflux equations.; Family Lloyd; Given Catherine; Other May; W3CDTF 2002-02-26
// modification: Updated metadata to conform to the 16/1/02 CellML Metadata 1.0 Specification.; Family Cuellar; Given Autumn; Other A.; W3CDTF 2002-01-22
// publisher: The University of Auckland, Bioengineering Research Group
// title: A model of the glycolysis pathway in the yeast Saccharomyces cerevisiae
// comment: This is the CellML description of Rizzi et al's mathematical model of the glycolysis pathway in the yeast Saccharomyces cerevisiae (1997). It should be observed that some variables are not fully defined in the CellML model. This is because some parameters were left out of the original paper because of missing sensitivities.; FN Catherine Lloyd
// species: Saccharomyces cerevisiae
// reference: subject_type keyword; metabolism
// JournalArticle: Family Rizzi; Given Manfred; Family Baltes; Given Michael; Family Reuss; Given Matthias; title In Vivo Analysis of Metabolic Dynamics in Saccharomyces cerevisiae: II. Mathematical Model; W3CDTF 1997; title Biotechnology and Bioengineering; volume 55; first_page 592; last_page 608
def model glycolysis_pathway_1997 as
  // The following RDF block contains metadata that applies to this document
  // as a whole, as indicated by the empty about attribute on the
  // <rdf:Description> element.
  // The Model Builder Metadata.  The Dublin Core "creator" element is used
  // to indicate the person who translated the model into CellML.
  // The Creation Date metadata. This is the date on which the model
  // was translated into CellML.
  // The Modification History metadata. This lists the changes that have been
  // made to the document, who made the changes, and when they were made.
  // The Publisher metadata.
  // The following metadata refers to the model itself, as indicated by the
  // reference to the ID "glycolysis_pathway_1997", which is declared on
  // the <model> element.
  // A human readable name for the model.
  // A comment regarding the model.
  // The creator of the comment.
  // Keyword(s)
  //
  // This paper is not available in Pubmed, so the citation is listed with            the appropriate BQS elements.
  // We start the model definition with a definition of some named
  // sets of units for use throughout the model.
  def unit millisecond as
    unit second {pref: milli};
  enddef;
  def unit millimolar as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit molar as
    unit mole;
    unit litre {expo: -1};
  enddef;
  def unit flux as
    unit millimolar;
    unit second {expo: -1};
  enddef;
  def unit molarflux as
    unit molar;
    unit second {expo: -1};
  enddef;
  def unit millimolar_per_molar as
    unit millimolar;
    unit molar {expo: -1};
  enddef;
  def unit first_order_rate_constant_units as
    unit second {expo: -1};
  enddef;
  def unit gram_per_second as
    unit gram;
    unit second {expo: -1};
  enddef;
  //
  // The following component is defined for modelling convenience.  It contains
  // all the universal variables, in this case, only time.

  def comp global_variables as
    var time: second {pub: out};
  enddef;
  //
  // The following components describe all the metabolites - both reactants and
  // products - involved in glycolysis.

  def comp Glc as
    var Glc: millimolar {pub: out};
    var delta_Glc_rxn1: flux {pub: in};
    var time: second {pub: in};
    ode(Glc, time) = delta_Glc_rxn1;
  enddef;

  def comp Glc_C as
    var Glc_C: millimolar {pub: out};
    var delta_Glc_C_rxn1: molarflux {pub: in};
    var delta_Glc_C_rxn2: flux {pub: in};
    var time: millisecond {pub: in};
    ode(Glc_C, time) = 1000{dimensionless}*(1000{millimolar_per_molar}*delta_Glc_C_rxn1+delta_Glc_C_rxn2);
  enddef;

  def comp G6P as
    var G6P: millimolar {pub: out};
    var delta_G6P_rxn2: flux {pub: in};
    var delta_G6P_rxn3: flux {pub: in};
    var delta_G6P_rxn14a: flux {pub: in};
    var time: second {pub: in};
    ode(G6P, time) = delta_G6P_rxn2+delta_G6P_rxn3+delta_G6P_rxn14a;
  enddef;

  def comp F6P as
    var F6P: millimolar {pub: out};
    var delta_F6P_rxn3: flux {pub: in};
    var delta_F6P_rxn4: flux {pub: in};
    var time: second {pub: in};
    ode(F6P, time) = delta_F6P_rxn3+delta_F6P_rxn4;
  enddef;

  def comp GAP as
    var GAP: millimolar {pub: out};
    var delta_GAP_rxn5: flux {pub: in};
    var delta_GAP_rxn6: flux {pub: in};
    var delta_GAP_rxn7: flux {pub: in};
    var time: second {pub: in};
    ode(GAP, time) = delta_GAP_rxn5+delta_GAP_rxn6+delta_GAP_rxn7;
  enddef;

  def comp PEP as
    var PEP: millimolar {pub: out};
    var delta_PEP_rxn7: flux {pub: in};
    var delta_PEP_rxn8: flux {pub: in};
    var time: second {pub: in};
    ode(PEP, time) = delta_PEP_rxn7+delta_PEP_rxn8;
  enddef;

  def comp Pyr as
    var Pyr: millimolar {pub: out};
    var delta_Pyr_rxn8: flux {pub: in};
    var delta_Pyr_rxn9: flux {pub: in};
    var delta_Pyr_rxn14b: flux {pub: in};
    var time: second {pub: in};
    ode(Pyr, time) = delta_Pyr_rxn8+delta_Pyr_rxn9+delta_Pyr_rxn14b;
  enddef;

  def comp Pyr_M as
    var Pyr_M: millimolar {pub: out};
    var delta_Pyr_M_rxn13: flux {pub: in};
    var time: second {pub: in};
    ode(Pyr_M, time) = delta_Pyr_M_rxn13;
  enddef;

  def comp ALD as
    var ALD: millimolar {pub: out};
    var delta_ALD_rxn9: flux {pub: in};
    var delta_ALD_rxn10: flux {pub: in};
    var delta_ALD_rxn11: flux {pub: in};
    var time: second {pub: in};
    ode(ALD, time) = delta_ALD_rxn9+delta_ALD_rxn10+delta_ALD_rxn11;
  enddef;

  def comp Ac as
    var Ac: millimolar {pub: out};
    var delta_Ac_rxn11: flux {pub: in};
    var time: second {pub: in};
    ode(Ac, time) = delta_Ac_rxn11;
  enddef;

  def comp FBP as
    var FBP: millimolar {pub: out};
    var delta_FBP_rxn4: flux {pub: in};
    var delta_FBP_rxn5: flux {pub: in};
    var time: second {pub: in};
    ode(FBP, time) = delta_FBP_rxn4+delta_FBP_rxn5;
  enddef;

  def comp DHAP as
    var DHAP: millimolar {pub: out};
    var delta_DHAP_rxn5: flux {pub: in};
    var delta_DHAP_rxn6: flux {pub: in};
    var delta_DHAP_rxn12: flux {pub: in};
    var time: second {pub: in};
    ode(DHAP, time) = delta_DHAP_rxn5+delta_DHAP_rxn6+delta_DHAP_rxn12;
  enddef;

  def comp GLYC as
    var GLYC: millimolar {pub: out};
    var delta_GLYC_rxn12: flux {pub: in};
    var time: second {pub: in};
    ode(GLYC, time) = delta_GLYC_rxn12;
  enddef;

  def comp ETOH as
    var ETOH: millimolar {pub: out};
    var delta_ETOH_rxn10: flux {pub: in};
    var time: second {pub: in};
    ode(ETOH, time) = delta_ETOH_rxn10;
  enddef;

  def comp AMP as
    var AMP: millimolar {pub: out};
    var delta_AMP_rxn17: flux {pub: in};
    var time: second {pub: in};
    ode(AMP, time) = delta_AMP_rxn17;
  enddef;

  def comp NADH as
    var NADH: millimolar {pub: out};
    var delta_NADH_rxn7: flux {pub: in};
    var delta_NADH_rxn10: flux {pub: in};
    var time: second {pub: in};
    ode(NADH, time) = delta_NADH_rxn7+delta_NADH_rxn10;
  enddef;

  def comp NADH_M as
    var NADH_M: millimolar {pub: out};
    var delta_NADH_M_rxn13: flux {pub: in};
    var time: second {pub: in};
    ode(NADH_M, time) = delta_NADH_M_rxn13;
  enddef;

  def comp NAD as
    var NAD: millimolar {pub: out};
    var delta_NAD_rxn7: flux {pub: in};
    var time: second {pub: in};
    ode(NAD, time) = delta_NAD_rxn7;
  enddef;

  def comp NAD_M as
    var NAD_M: millimolar {pub: out};
    var delta_NAD_M_rxn13: flux {pub: in};
    var time: second {pub: in};
    ode(NAD_M, time) = delta_NAD_M_rxn13;
  enddef;

  def comp ATP as
    var ATP: millimolar {pub: out};
    var delta_ATP_rxn2: flux {pub: in};
    var delta_ATP_rxn8: flux {pub: in};
    var delta_ATP_rxn14a: flux {pub: in};
    var delta_ATP_rxn14b: flux {pub: in};
    var delta_ATP_rxn15: flux {pub: in};
    var delta_ATP_rxn17: flux {pub: in};
    var delta_ATP_rxn20: flux {pub: in};
    var time: second {pub: in};
    ode(ATP, time) = delta_ATP_rxn2+delta_ATP_rxn8+delta_ATP_rxn14a+delta_ATP_rxn14b+delta_ATP_rxn15+delta_ATP_rxn17+delta_ATP_rxn20;
  enddef;

  def comp ATP_M as
    var ATP_M: millimolar {pub: out};
    var delta_ATP_M_rxn15: flux {pub: in};
    var time: second {pub: in};
    ode(ATP_M, time) = delta_ATP_M_rxn15;
  enddef;

  def comp ATP_G as
    var ATP_G: millimolar {pub: out};
    var delta_ATP_G_rxn20: flux {pub: in};
    var time: second {pub: in};
    ode(ATP_G, time) = delta_ATP_G_rxn20;
  enddef;

  def comp ADP as
    var ADP: millimolar {pub: out};
    var delta_ADP_rxn2: flux {pub: in};
    var delta_ADP_rxn8: flux {pub: in};
    var delta_ADP_rxn15: flux {pub: in};
    var delta_ADP_rxn17: flux {pub: in};
    var time: second {pub: in};
    ode(ADP, time) = delta_ADP_rxn2+delta_ADP_rxn8+delta_ADP_rxn15+delta_ADP_rxn17;
  enddef;

  def comp ADP_M as
    var ADP_M: millimolar {pub: out};
    var delta_ADP_M_rxn15: flux {pub: in};
    var time: second {pub: in};
    ode(ADP_M, time) = delta_ADP_M_rxn15;
  enddef;

  def comp Monomeric_building_blocks as
    var Monomeric_building_blocks: millimolar {pub: out};
    var delta_Monomeric_building_blocks_rxn14a: flux {pub: in};
    var delta_Monomeric_building_blocks_rxn14b: flux {pub: in};
    var time: second {pub: in};
    ode(Monomeric_building_blocks, time) = delta_Monomeric_building_blocks_rxn14a+delta_Monomeric_building_blocks_rxn14b;
  enddef;
  //
  // The following components describe all the active proteins involved in the
  // glycolytic pathway - both metabolic enzymes and membrane bound transport
  // proteins.  Because enzymes only act as catalysts in metabolic reactions and
  // transport proteins only facilitate the transfer of metabolites, their
  // concentrations are not affected by the reaction and therefore no delta
  // variables are declared.

  def comp PERM as
    var PERM: millimolar {pub: out};
  enddef;

  def comp HK as
    var HK: millimolar {pub: out};
  enddef;

  def comp PGI as
    var PGI: millimolar {pub: out};
  enddef;

  def comp PFK as
    var PFK: millimolar {pub: out};
  enddef;

  def comp ALDO as
    var ALDO: millimolar {pub: out};
  enddef;

  def comp PK as
    var PK: millimolar {pub: out};
  enddef;

  def comp PDC as
    var PDC: millimolar {pub: out};
  enddef;

  def comp ALDH as
    var ALDH: millimolar {pub: out};
  enddef;

  def comp ADH as
    var ADH: millimolar {pub: out};
  enddef;

  def comp TIS as
    var TIS: millimolar {pub: out};
  enddef;

  def comp ADK as
    var ADK: millimolar {pub: out};
  enddef;

  def comp TR_ATP as
    var TR_ATP: millimolar {pub: out};
  enddef;

  def comp TR_ADP as
    var TR_ADP: millimolar {pub: out};
  enddef;

  def comp PDH as
    var PDH: millimolar {pub: out};
  enddef;

  def comp RES2 as
    var RES2: millimolar {pub: out};
  enddef;

  def comp RES1 as
    var RES1: millimolar {pub: out};
  enddef;
  // The following components represent the reaction steps of glycolysis.

  // comment: Transport of glucose across the cell membrane occurs via a permease subject to inhibition by G6P.
  def comp glucose_transport_system as
    var Glc: millimolar {pub: in};
    var Glc_C: millimolar {pub: in};
    var G6P: millimolar {pub: in};
    var PERM: millimolar {pub: in};
    var delta_Glc_rxn1: flux {pub: out};
    var delta_Glc_C_rxn1: flux {pub: out};
    var k_Glc_1: millimolar {init: 0.42};
    var k_I_G6P_1: millimolar {init: 1.76};
    var k_II_G6P_1: millimolar {init: 7.5};
    var rmax_perm: first_order_rate_constant_units {init: 2.27};
    var r_influx: flux;
    var r_efflux: flux;
    var r_perm: flux;
    reaction {reversible: yes}
      variable_ref {variable: Glc}
        role {role: reactant, delta_variable: delta_Glc_rxn1, stoichiometry: 1}
      variable_ref {variable: Glc_C}
        role {role: product, delta_variable: delta_Glc_C_rxn1, stoichiometry: 1}
      variable_ref {variable: PERM}
        role {role: catalyst}
      variable_ref {variable: G6P}
        role {role: inhibitor}
      variable_ref {variable: r_perm}
        role {role: rate}
          r_perm = r_influx-r_efflux;
    r_influx = rmax_perm*(Glc/k_Glc_1)/(1.0{dimensionless}+Glc/k_Glc_1+(1.0{dimensionless}+Glc/k_Glc_1)/(1.0{dimensionless}+Glc_C/k_Glc_1)*(1.0{dimensionless}+Glc_C/k_Glc_1+G6P/k_I_G6P_1+Glc_C*G6P/(k_Glc_1*k_II_G6P_1)));
    r_efflux = rmax_perm*(Glc_C/k_Glc_1)/(1.0{dimensionless}+Glc_C/k_Glc_1+(1.0{dimensionless}+Glc_C/k_Glc_1)/(1.0{dimensionless}+Glc/k_Glc_1)*(1.0{dimensionless}+Glc/k_Glc_1+G6P/k_I_G6P_1+Glc_C*G6P/(k_Glc_1*k_II_G6P_1)));
  enddef;

  // comment: The phosphorylation of glucose by hexokinase is modeled as a reversible double-substrate, double-product kinetic.
  def comp glucose_phosphorylation as
    var Glc_C: millimolar {pub: in};
    var G6P: millimolar {pub: in};
    var HK: millimolar {pub: in};
    var ATP: millimolar {pub: in};
    var ADP: millimolar {pub: in};
    var delta_Glc_C_rxn2: flux {pub: out};
    var delta_G6P_rxn2: flux {pub: out};
    var delta_ATP_rxn2: flux {pub: out};
    var delta_ADP_rxn2: flux {pub: out};
    var k_Glc_2: millimolar {init: 0.17};
    var k_ATP_2: millimolar {init: 0.2};
    var k_ADP_2: millimolar {init: 1.14};
    var rmax_HK: first_order_rate_constant_units {init: 2.65};
    var r_HK: flux;
    reaction {reversible: yes}
      variable_ref {variable: Glc_C}
        role {role: reactant, delta_variable: delta_Glc_C_rxn2, stoichiometry: 1}
      variable_ref {variable: ATP}
        role {role: reactant, delta_variable: delta_ATP_rxn2, stoichiometry: 1}
      variable_ref {variable: G6P}
        role {role: product, delta_variable: delta_G6P_rxn2, stoichiometry: 1}
      variable_ref {variable: ADP}
        role {role: product, delta_variable: delta_ADP_rxn2, stoichiometry: 1}
      variable_ref {variable: HK}
        role {role: catalyst}
      variable_ref {variable: r_HK}
        role {role: rate}
          r_HK = rmax_HK/(1.0{dimensionless}+k_ATP_2/ATP*(1.0{dimensionless}+ADP/k_ADP_2)+k_Glc_2/Glc_C+k_ADP_2*k_Glc_2/(ATP*Glc_C)*(1.0{dimensionless}+ADP/k_ADP_2));
  enddef;

  // comment: For the following reaction, a near equilibrium is assumed.
  def comp phosphoglucose_isomerisation as
    var G6P: millimolar {pub: in};
    var F6P: millimolar {pub: in};
    var PGI: millimolar {pub: in};
    var delta_G6P_rxn3: flux {pub: out};
    var delta_F6P_rxn3: flux {pub: out};
    var k_G6P_3: millimolar {init: 420.0};
    var k_F6P_3: millimolar {init: 103.0};
    var k_eq_3: dimensionless {init: 0.2};
    var rmax_PGI: first_order_rate_constant_units {init: 754.2};
    var r_PGI: flux;
    reaction {reversible: yes}
      variable_ref {variable: G6P}
        role {role: reactant, delta_variable: delta_G6P_rxn3, stoichiometry: 1}
      variable_ref {variable: F6P}
        role {role: product, delta_variable: delta_F6P_rxn3, stoichiometry: 1}
      variable_ref {variable: PGI}
        role {role: catalyst}
      variable_ref {variable: r_PGI}
        role {role: rate}
          r_PGI = rmax_PGI*((G6P-F6P/k_eq_3)/(k_G6P_3*(1.0{dimensionless}+F6P/k_F6P_3)+G6P));
  enddef;

  // comment: The kinetics of the following reaction are based on a four-state allosteric enzyme model, including AMP and ADP as activators and ATP as an inhibitor.
  def comp fructose_6_phosphate_phosphorylation as
    var F6P: millimolar {pub: in};
    var FBP: millimolar {pub: in};
    var PFK: millimolar {pub: in};
    var ATP: millimolar {pub: in};
    var ADP: millimolar {pub: in};
    var AMP: millimolar {pub: in};
    var delta_F6P_rxn4: flux {pub: out};
    var delta_FBP_rxn4: flux {pub: out};
    var k_F6PS_4: millimolar {init: 0.0080};
    var k_ATP1_4: millimolar {init: 0.25};
    var k_ATP_4: millimolar;
    var k_F6P_4: millimolar;
    var k_ADP2_4: millimolar {init: 0.25};
    var k_AMP2_4: millimolar {init: 0.01};
    var k_ADP1_4: millimolar {init: 239.0};
    var k_AMP1_4: millimolar {init: 8.74};
    var k_ATPS_4: millimolar {init: 0.004};
    var k_ADPC_4: millimolar {init: 0.36};
    var LO_4: dimensionless {init: 4357.0};
    var L4: dimensionless;
    var rmax_PFK: first_order_rate_constant_units {init: 2.33};
    var r_PFK: flux;
    reaction {reversible: no}
      variable_ref {variable: F6P}
        role {role: reactant, delta_variable: delta_F6P_rxn4, stoichiometry: 1}
      variable_ref {variable: FBP}
        role {role: product, delta_variable: delta_FBP_rxn4, stoichiometry: 1}
      variable_ref {variable: PFK}
        role {role: catalyst}
      variable_ref {variable: ATP}
        role {role: inhibitor}
      variable_ref {variable: ADP}
        role {role: activator}
      variable_ref {variable: AMP}
        role {role: activator}
      variable_ref {variable: r_PFK}
        role {role: rate}
          r_PFK = rmax_PFK*(ATP/(ATP+k_ATP_4))*(F6P/(F6P+k_F6P_4))*(1.0{dimensionless}/(1.0{dimensionless}+L4));
    k_ATP_4 = k_ATPS_4*(1.0{dimensionless}+ADP/k_ADPC_4);
    L4 = LO_4/pow(1.0{dimensionless}+F6P/k_F6P_4, 8.0{dimensionless});
    k_F6P_4 = k_F6PS_4*((8.0{dimensionless}+ATP/k_ATP1_4+ADP/k_ADP2_4+AMP/k_AMP2_4)/(8.0{dimensionless}+ADP/k_ADP1_4+AMP/k_AMP1_4));
  enddef;

  // comment: The following rate equation is based on an ordered-uni-bimechanism.
  def comp FBP_splitting as
    var FBP: millimolar {pub: in};
    var GAP: millimolar {pub: in};
    var ALDO: millimolar {pub: in};
    var DHAP: millimolar {pub: in};
    var delta_FBP_rxn5: flux {pub: out};
    var delta_GAP_rxn5: flux {pub: out};
    var delta_DHAP_rxn5: flux {pub: out};
    var k_FBP_5: millimolar {init: 0.054};
    var k_GAP_5: millimolar {init: 2.0};
    var k_eq_5: millimolar {init: 0.81};
    var k_DHAP_5: millimolar {init: 2.0};
    var k_IGAP_5: millimolar {init: 10.0};
    var V_BF_5: first_order_rate_constant_units {init: 5.0};
    var rmax_ALDO: first_order_rate_constant_units {init: 2.73};
    var r_ALDO: flux;
    reaction {reversible: no}
      variable_ref {variable: FBP}
        role {role: reactant, delta_variable: delta_FBP_rxn5, stoichiometry: 1}
      variable_ref {variable: GAP}
        role {role: product, delta_variable: delta_GAP_rxn5, stoichiometry: 1}
      variable_ref {variable: DHAP}
        role {role: product, delta_variable: delta_DHAP_rxn5, stoichiometry: 1}
      variable_ref {variable: ALDO}
        role {role: catalyst}
      variable_ref {variable: r_ALDO}
        role {role: rate}
          r_ALDO = (rmax_ALDO*FBP-GAP*DHAP/k_eq_5)/(k_FBP_5+FBP+GAP*(k_DHAP_5/(k_eq_5*V_BF_5))+k_GAP_5/(k_eq_5*V_BF_5)+FBP*GAP/k_IGAP_5+DHAP*GAP/(k_eq_5*V_BF_5));
  enddef;

  // comment: The reaction step RES1 substitutes for the two reactions catalysed by glycerol-3-phosphate dehydrogenase and glycerol-1-phosphate. The kinetics of the resulting reaction were simplified by an empirical Hill kinetic.
  def comp glycerol_synthesis as
    var DHAP: millimolar {pub: in};
    var GLYC: millimolar {pub: in};
    var RES1: millimolar {pub: in};
    var delta_DHAP_rxn12: flux {pub: out};
    var delta_GLYC_rxn12: flux {pub: out};
    var k_DHAP_12: millimolar {init: 0.0037};
    var n_12: dimensionless {init: 4.96};
    var rmax_RES1: first_order_rate_constant_units {init: 0.023};
    var r_RES1: flux;
    reaction {reversible: no}
      variable_ref {variable: DHAP}
        role {role: reactant, delta_variable: delta_DHAP_rxn12, stoichiometry: 1}
      variable_ref {variable: GLYC}
        role {role: product, delta_variable: delta_GLYC_rxn12, stoichiometry: 1}
      variable_ref {variable: RES1}
        role {role: catalyst}
      variable_ref {variable: r_RES1}
        role {role: rate}
          r_RES1 = rmax_RES1*(pow(DHAP, n_12)/(k_DHAP_12+pow(DHAP, n_12)));
  enddef;

  // comment: The reaction RES2 stands for an empirical connection of the enzymes glyceraldehyde-3-phosphate dehydrogenase (GAPH), phosphoglycerate kinase (PGK), phosphoglycerate mutase (PM) and enolase (EN). The reactions are coupled to the conversion of NAD+ to NADH and production of ATP. These reactions may be combined into a single reaction.
  def comp PEP_synthesis as
    var RES2: millimolar {pub: in};
    var GAP: millimolar {pub: in};
    var PEP: millimolar {pub: in};
    var NAD: millimolar {pub: in};
    var NADH: millimolar {pub: in};
    var delta_GAP_rxn7: flux {pub: out};
    var delta_PEP_rxn7: flux {pub: out};
    var delta_NAD_rxn7: flux {pub: out};
    var delta_NADH_rxn7: flux {pub: out};
    var k_NAD_7: millimolar {init: 0.018};
    var k_NADH_7: millimolar {init: 0.24};
    var k_NAD_7_: millimolar {init: 0.038};
    var k_NADH_7_: millimolar {init: 0.24};
    var k_GAP_7: millimolar {init: 0.1};
    var n_7: dimensionless {init: 4.0};
    var LO_7: dimensionless {init: 10.0};
    var A: dimensionless;
    var B: dimensionless;
    var rmax_RES2: first_order_rate_constant_units {init: 10.57};
    var r_RES2: flux;
    reaction {reversible: no}
      variable_ref {variable: GAP}
        role {role: reactant, delta_variable: delta_GAP_rxn7, stoichiometry: 1}
      variable_ref {variable: NAD}
        role {role: reactant, delta_variable: delta_NAD_rxn7, stoichiometry: 1}
      variable_ref {variable: PEP}
        role {role: product, delta_variable: delta_PEP_rxn7, stoichiometry: 1}
      variable_ref {variable: NADH}
        role {role: product, delta_variable: delta_NADH_rxn7, stoichiometry: 1}
      variable_ref {variable: RES2}
        role {role: catalyst}
      variable_ref {variable: r_RES2}
        role {role: rate}
          r_RES2 = rmax_RES2*((NAD/k_NAD_7*pow(A, n_7-1.0{dimensionless})+k_NAD_7/k_NAD_7_*(NAD/k_NAD_7)*LO_7*pow(B, n_7-1.0{dimensionless}))/(pow(A, n_7)+LO_7*pow(B, n_7)))*(pow(GAP, n_7)/(k_GAP_7+pow(GAP, n_7)));
    A = 1.0{dimensionless}+NAD/k_NAD_7+NADH/k_NADH_7;
    B = 1.0{dimensionless}+NAD/k_NAD_7_+NADH/k_NADH_7_;
  enddef;

  // comment: The reaction catalysed by pyruvate kinase is represented by double-substrate, double-product kinetics with a concerted allosteric regulation due to FBP, ATP and PEP.
  def comp PEP_dephosphorylation as
    var PEP: millimolar {pub: in};
    var Pyr: millimolar {pub: in};
    var FBP: millimolar {pub: in};
    var PK: millimolar {pub: in};
    var ATP: millimolar {pub: in};
    var ADP: millimolar {pub: in};
    var delta_PEP_rxn8: flux {pub: out};
    var delta_Pyr_rxn8: flux {pub: out};
    var delta_ADP_rxn8: flux {pub: out};
    var delta_ATP_rxn8: flux {pub: out};
    var k_PEP_8: millimolar {init: 0.6};
    var k_FBP_8: millimolar {init: 3.9};
    var k_ATP_8: millimolar {init: 2.0};
    var k_ADP_8: millimolar {init: 0.6};
    var LO_8: dimensionless {init: 100.0};
    var n_8: dimensionless {init: 4.0};
    var rmax_PK: first_order_rate_constant_units {init: 5780.0};
    var r_PK: flux;
    reaction {reversible: yes}
      variable_ref {variable: PEP}
        role {role: reactant, delta_variable: delta_PEP_rxn8, stoichiometry: 1}
      variable_ref {variable: ADP}
        role {role: reactant, delta_variable: delta_ADP_rxn8, stoichiometry: 1}
      variable_ref {variable: Pyr}
        role {role: product, delta_variable: delta_Pyr_rxn8, stoichiometry: 1}
      variable_ref {variable: ATP}
        role {role: product, delta_variable: delta_ATP_rxn8, stoichiometry: 1}
      variable_ref {variable: PK}
        role {role: catalyst}
      variable_ref {variable: FBP}
        role {role: modifier}
      variable_ref {variable: r_PK}
        role {role: rate}
          r_PK = rmax_PK*(PEP/k_PEP_8*pow(1.0{dimensionless}+PEP/k_PEP_8, n_8-1.0{dimensionless})/(LO_8*pow((1.0{dimensionless}+ATP/k_ATP_8)/(1.0{dimensionless}+FBP/k_FBP_8), n_8)+pow(1.0{dimensionless}+PEP/k_PEP_8, n_8)))*(ADP/(ADP+k_ADP_8));
  enddef;

  // comment: The rate expression for pyruvate decarboxylase considers a co-operative effect of the substrate pyruvate.
  def comp pyruvate_decarboxylation as
    var Pyr: millimolar {pub: in};
    var ALD: millimolar {pub: in};
    var PDC: millimolar {pub: in};
    var delta_Pyr_rxn9: flux {pub: out};
    var delta_ALD_rxn9: flux {pub: out};
    var k_Pyr_9: millimolar {init: 4.5};
    var k_a_9: millimolar {init: 2.0};
    var n_9: dimensionless;
    var rmax_PDC: first_order_rate_constant_units {init: 1.65};
    var r_PDC: flux;
    reaction {reversible: no}
      variable_ref {variable: Pyr}
        role {role: reactant, delta_variable: delta_Pyr_rxn9, stoichiometry: 1}
      variable_ref {variable: ALD}
        role {role: product, delta_variable: delta_ALD_rxn9, stoichiometry: 1}
      variable_ref {variable: PDC}
        role {role: catalyst}
      variable_ref {variable: r_PDC}
        role {role: rate}
          r_PDC = rmax_PDC*(pow(Pyr, n_9)/(k_a_9+k_Pyr_9+k_Pyr_9*Pyr+pow(Pyr, n_9)));
  enddef;

  // comment: The rate, r_SYNT1 summarizes the several reactions that originate at G6P. Double-substrate kinetics are used and because biosynthetic pathways are involved, an additional ATP consumption is assumed.
  def comp monomeric_building_block_synthesis as
    var G6P: millimolar {pub: in};
    var ATP: millimolar {pub: in};
    var Pyr: millimolar {pub: in};
    var Monomeric_building_blocks: millimolar {pub: in};
    var delta_G6P_rxn14a: flux {pub: out};
    var delta_ATP_rxn14a: flux {pub: out};
    var delta_Pyr_rxn14b: flux {pub: out};
    var delta_ATP_rxn14b: flux {pub: out};
    var delta_Monomeric_building_blocks_rxn14a: flux {pub: out};
    var delta_Monomeric_building_blocks_rxn14b: flux {pub: out};
    var k_G6P_14a: millimolar {init: 2.7};
    var k_ATP_14a: millimolar {init: 0.4};
    var k_Pyr_14b: millimolar {init: 0.92};
    var k_ATP_14b: millimolar {init: 13.2};
    var rmax_SYNT1: first_order_rate_constant_units {init: 0.19};
    var r_SYNT1: flux {pub: out};
    var rmax_SYNT2: first_order_rate_constant_units {init: 1.51};
    var r_SYNT2: flux {pub: out};
    reaction {reversible: no}
      variable_ref {variable: G6P}
        role {role: reactant, delta_variable: delta_G6P_rxn14a, stoichiometry: 1}
      variable_ref {variable: ATP}
        role {role: reactant, delta_variable: delta_ATP_rxn14a, stoichiometry: 1}
      variable_ref {variable: Monomeric_building_blocks}
        role {role: product, delta_variable: delta_Monomeric_building_blocks_rxn14a, stoichiometry: 1}
      variable_ref {variable: r_SYNT1}
        role {role: rate}
          r_SYNT1 = rmax_SYNT1*(G6P/(k_G6P_14a+G6P))*(ATP/(k_ATP_14a+ATP));
    reaction {reversible: no}
      variable_ref {variable: Pyr}
        role {role: reactant, delta_variable: delta_Pyr_rxn14b, stoichiometry: 1}
      variable_ref {variable: ATP}
        role {role: reactant, delta_variable: delta_ATP_rxn14b, stoichiometry: 1}
      variable_ref {variable: Monomeric_building_blocks}
        role {role: product, delta_variable: delta_Monomeric_building_blocks_rxn14b, stoichiometry: 1}
      variable_ref {variable: r_SYNT2}
        role {role: rate}
          r_SYNT2 = rmax_SYNT2*(Pyr/(k_Pyr_14b+Pyr))*(ATP/(k_ATP_14b+ATP));
  enddef;

  // comment: Alcohol dehydrogenase is modeled with double-substrate kinetics.
  def comp alcohol_dehydrogenation as
    var ALD: millimolar {pub: in};
    var ETOH: millimolar {pub: in};
    var NADH: millimolar {pub: in};
    var ADH: millimolar {pub: in};
    var delta_ALD_rxn10: flux {pub: out};
    var delta_NADH_rxn10: flux {pub: out};
    var delta_ETOH_rxn10: flux {pub: out};
    var k_ALD_10: millimolar {init: 135.0};
    var k_NADH_10: millimolar {init: 0.6};
    var rmax_ADH: first_order_rate_constant_units {init: 150.2};
    var r_ADH: flux;
    reaction {reversible: no}
      variable_ref {variable: ALD}
        role {role: reactant, delta_variable: delta_ALD_rxn10, stoichiometry: 1}
      variable_ref {variable: NADH}
        role {role: reactant, delta_variable: delta_NADH_rxn10, stoichiometry: 1}
      variable_ref {variable: ETOH}
        role {role: product, delta_variable: delta_ETOH_rxn10, stoichiometry: 1}
      variable_ref {variable: ADH}
        role {role: catalyst}
      variable_ref {variable: r_ADH}
        role {role: rate}
          r_ADH = rmax_ADH*(ALD/(k_ALD_10+ALD))*(NADH/(k_NADH_10+NADH));
  enddef;

  // comment: The enzyme acetaldehyde dehydrogenase shows substrate inhibition kinetics.
  def comp acetaldehyde_dehydrogenation as
    var ALD: millimolar {pub: in};
    var Ac: millimolar {pub: in};
    var ALDH: millimolar {pub: in};
    var delta_ALD_rxn11: flux {pub: out};
    var delta_Ac_rxn11: flux {pub: out};
    var k_ALD_11: millimolar {init: 0.17};
    var k_I_ALD_11: millimolar {init: 0.19};
    var rmax_ALDH: first_order_rate_constant_units {init: 0.98};
    var r_ALDH: flux;
    reaction {reversible: no}
      variable_ref {variable: ALD}
        role {role: reactant, delta_variable: delta_ALD_rxn11, stoichiometry: 1}
      variable_ref {variable: Ac}
        role {role: product, delta_variable: delta_Ac_rxn11, stoichiometry: 1}
      variable_ref {variable: ALDH}
        role {role: catalyst}
      variable_ref {variable: r_ALDH}
        role {role: rate}
          r_ALDH = rmax_ALDH*(ALD/(k_ALD_11+ALD+sqr(ALD)/k_ALD_11));
  enddef;

  // comment: The adenylate kinase reaction allows the production of ADP from AMP and ATP and has been modeled with a near-equilibrium reaction.
  def comp ATP_synthesis as
    var AMP: millimolar {pub: in};
    var ADP: millimolar {pub: in};
    var ATP: millimolar {pub: in};
    var ADK: millimolar {pub: in};
    var delta_AMP_rxn17: flux {pub: out};
    var delta_ADP_rxn17: flux {pub: out};
    var delta_ATP_rxn17: flux {pub: out};
    var k_eq_17: dimensionless {init: 0.35};
    var rmax_ADK: first_order_rate_constant_units {init: 0.35};
    var r_ADK: flux;
    reaction {reversible: no}
      variable_ref {variable: AMP}
        role {role: reactant, delta_variable: delta_AMP_rxn17, stoichiometry: 1}
      variable_ref {variable: ADP}
        role {role: reactant, delta_variable: delta_ADP_rxn17, stoichiometry: 1}
      variable_ref {variable: ATP}
        role {role: product, delta_variable: delta_ATP_rxn17, stoichiometry: 1}
      variable_ref {variable: ADK}
        role {role: catalyst}
      variable_ref {variable: r_ADK}
        role {role: rate}
          r_ADK = rmax_ADK*sqr(ADP)*(1.0{dimensionless}-ATP*AMP/(k_eq_17*sqr(ADP)));
  enddef;

  // comment: The rate equation for the triose phosphate isomerase is a reversible Michaelis-Menten kinetic.
  def comp triosephosphate_isomerisation as
    var GAP: millimolar {pub: in};
    var DHAP: millimolar {pub: in};
    var TIS: millimolar {pub: in};
    var delta_GAP_rxn6: flux {pub: out};
    var delta_DHAP_rxn6: flux {pub: out};
    var k_eq_6: dimensionless {init: 0.045};
    var k_DHAP_6: millimolar {init: 0.38};
    var k_GAP_6: millimolar {init: 0.064};
    var rmax_TIS: first_order_rate_constant_units {init: 1.32};
    var r_TIS: flux;
    reaction {reversible: yes}
      variable_ref {variable: DHAP}
        role {role: reactant, delta_variable: delta_DHAP_rxn6, stoichiometry: 1}
      variable_ref {variable: GAP}
        role {role: product, delta_variable: delta_GAP_rxn6, stoichiometry: 1}
      variable_ref {variable: TIS}
        role {role: catalyst}
      variable_ref {variable: r_TIS}
        role {role: rate}
          r_TIS = rmax_TIS*((DHAP-GAP/k_eq_6)/(k_DHAP_6*(1.0{dimensionless}+GAP/k_GAP_6)+DHAP));
  enddef;

  // comment: The exchange of adenine nucleotides across the mitochondrial membrane (translocation) is essential for the dynamic analysis of the yeast under aerobic growth conditions. The translocation of adenine nucleotides has not been studied in yeast cells. The equations below are based on studies using rat liver cells. Unsymmetrical and uncoupled translocation following two irreversible Michaelis-Menten kinetics. AMP exchange is not possible.
  def comp ATP_ADP_translocation as
    var ATP: millimolar {pub: in};
    var ADP: millimolar {pub: in};
    var ATP_M: millimolar {pub: in};
    var ADP_M: millimolar {pub: in};
    var TR_ADP: millimolar {pub: in};
    var TR_ATP: millimolar {pub: in};
    var delta_ATP_rxn15: flux {pub: out};
    var delta_ADP_rxn15: flux {pub: out};
    var delta_ATP_M_rxn15: flux {pub: out};
    var delta_ADP_M_rxn15: flux {pub: out};
    var k_ATP_15: millimolar {init: 5.0};
    var k_ADP_15: millimolar {init: 0.42};
    var rmax_TR_ADP: first_order_rate_constant_units {init: 3.35};
    var rmax_TR_ATP: first_order_rate_constant_units {init: 2.89};
    var r_TR_ADP: flux;
    var r_TR_ATP: flux;
    reaction {reversible: no}
      variable_ref {variable: ADP}
        role {role: reactant, delta_variable: delta_ADP_rxn15, stoichiometry: 1}
      variable_ref {variable: ADP_M}
        role {role: product, delta_variable: delta_ADP_M_rxn15, stoichiometry: 1}
      variable_ref {variable: TR_ADP}
        role {role: catalyst}
      variable_ref {variable: r_TR_ADP}
        role {role: rate}
          r_TR_ADP = rmax_TR_ADP*(ADP/(k_ADP_15+ADP));
    reaction {reversible: no}
      variable_ref {variable: ATP_M}
        role {role: reactant, delta_variable: delta_ATP_M_rxn15, stoichiometry: 1}
      variable_ref {variable: ATP}
        role {role: product, delta_variable: delta_ATP_rxn15, stoichiometry: 1}
      variable_ref {variable: TR_ATP}
        role {role: catalyst}
      variable_ref {variable: r_TR_ATP}
        role {role: rate}
          r_TR_ATP = rmax_TR_ATP*(ATP_M/(k_ATP_15+ATP_M));
  enddef;

  // comment: ATP demand for growth is summarized in the rate equation below.
  def comp ATP_for_biosynthesis as
    var ATP_G: millimolar {pub: in};
    var ATP: millimolar {pub: in};
    var delta_ATP_G_rxn20: flux {pub: out};
    var delta_ATP_rxn20: flux {pub: out};
    var r_SYNT1: flux {pub: in};
    var r_SYNT2: flux {pub: in};
    var m_ATP: flux {init: 5.0};
    var a_ATP_1: dimensionless {init: 12.0};
    var a_ATP_2: dimensionless {init: 10.0};
    var r_ATP_G: flux;
    var C_X: gram;
    var mu: gram_per_second;
    reaction {reversible: no}
      variable_ref {variable: ATP}
        role {role: reactant, delta_variable: delta_ATP_rxn20, stoichiometry: 1}
      variable_ref {variable: ATP_G}
        role {role: product, delta_variable: delta_ATP_G_rxn20, stoichiometry: 1}
      variable_ref {variable: r_ATP_G}
        role {role: rate}
          r_ATP_G = (a_ATP_1*r_SYNT1+a_ATP_2*r_SYNT2)*(mu*C_X)+m_ATP*C_X;
  enddef;

  // comment: The kinetic expression for pyruvate dehydrogenase assumes ping-pong kinetics with two substrates and one product.
  def comp pyruvate_dehydrogenation as
    var PDH: millimolar {pub: in};
    var Pyr_M: millimolar {pub: in};
    var NAD_M: millimolar {pub: in};
    var NADH_M: millimolar {pub: in};
    var delta_Pyr_M_rxn13: flux {pub: out};
    var delta_NAD_M_rxn13: flux {pub: out};
    var delta_NADH_M_rxn13: flux {pub: out};
    var k_Pyr_13: millimolar {init: 70.0};
    var k_I_Pyr_13: millimolar {init: 20.0};
    var k_NAD_13: millimolar {init: 160.0};
    var k_I_NADH_13: millimolar {init: 50.0};
    var rmax_PDH: first_order_rate_constant_units {init: 6.32};
    var r_PDH: flux;
    reaction {reversible: no}
      variable_ref {variable: Pyr_M}
        role {role: reactant, delta_variable: delta_Pyr_M_rxn13, stoichiometry: 1}
      variable_ref {variable: NAD_M}
        role {role: reactant, delta_variable: delta_NAD_M_rxn13, stoichiometry: 1}
      variable_ref {variable: NADH_M}
        role {role: product, delta_variable: delta_NADH_M_rxn13, stoichiometry: 1}
      variable_ref {variable: PDH}
        role {role: catalyst}
      variable_ref {variable: r_PDH}
        role {role: rate}
          r_PDH = rmax_PDH*Pyr_M*NAD_M/(k_NAD_13*Pyr_M+k_Pyr_13*NAD_M+k_I_Pyr_13*k_NAD_13/k_I_NADH_13*NADH_M+Pyr_M*NAD_M+k_NAD_13/k_I_NADH_13*Pyr_M*NADH_M);
  enddef;
  def map between glucose_transport_system and Glc for
    vars Glc and Glc;
    vars delta_Glc_rxn1 and delta_Glc_rxn1;
  enddef;
  def map between glucose_transport_system and Glc_C for
    vars Glc_C and Glc_C;
    vars delta_Glc_C_rxn1 and delta_Glc_C_rxn1;
  enddef;
  def map between glucose_transport_system and G6P for
    vars G6P and G6P;
  enddef;
  def map between glucose_transport_system and PERM for
    vars PERM and PERM;
  enddef;
  def map between glucose_phosphorylation and Glc_C for
    vars Glc_C and Glc_C;
    vars delta_Glc_C_rxn2 and delta_Glc_C_rxn2;
  enddef;
  def map between glucose_phosphorylation and G6P for
    vars G6P and G6P;
    vars delta_G6P_rxn2 and delta_G6P_rxn2;
  enddef;
  def map between glucose_phosphorylation and HK for
    vars HK and HK;
  enddef;
  def map between glucose_phosphorylation and ATP for
    vars ATP and ATP;
    vars delta_ATP_rxn2 and delta_ATP_rxn2;
  enddef;
  def map between glucose_phosphorylation and ADP for
    vars ADP and ADP;
    vars delta_ADP_rxn2 and delta_ADP_rxn2;
  enddef;
  def map between phosphoglucose_isomerisation and G6P for
    vars G6P and G6P;
    vars delta_G6P_rxn3 and delta_G6P_rxn3;
  enddef;
  def map between phosphoglucose_isomerisation and F6P for
    vars F6P and F6P;
    vars delta_F6P_rxn3 and delta_F6P_rxn3;
  enddef;
  def map between phosphoglucose_isomerisation and PGI for
    vars PGI and PGI;
  enddef;
  def map between fructose_6_phosphate_phosphorylation and F6P for
    vars F6P and F6P;
    vars delta_F6P_rxn4 and delta_F6P_rxn4;
  enddef;
  def map between fructose_6_phosphate_phosphorylation and FBP for
    vars FBP and FBP;
    vars delta_FBP_rxn4 and delta_FBP_rxn4;
  enddef;
  def map between fructose_6_phosphate_phosphorylation and PFK for
    vars PFK and PFK;
  enddef;
  def map between fructose_6_phosphate_phosphorylation and ATP for
    vars ATP and ATP;
  enddef;
  def map between fructose_6_phosphate_phosphorylation and ADP for
    vars ADP and ADP;
  enddef;
  def map between fructose_6_phosphate_phosphorylation and AMP for
    vars AMP and AMP;
  enddef;
  def map between FBP_splitting and FBP for
    vars FBP and FBP;
    vars delta_FBP_rxn5 and delta_FBP_rxn5;
  enddef;
  def map between FBP_splitting and GAP for
    vars GAP and GAP;
    vars delta_GAP_rxn5 and delta_GAP_rxn5;
  enddef;
  def map between FBP_splitting and DHAP for
    vars DHAP and DHAP;
    vars delta_DHAP_rxn5 and delta_DHAP_rxn5;
  enddef;
  def map between FBP_splitting and ALDO for
    vars ALDO and ALDO;
  enddef;
  def map between glycerol_synthesis and DHAP for
    vars DHAP and DHAP;
    vars delta_DHAP_rxn12 and delta_DHAP_rxn12;
  enddef;
  def map between glycerol_synthesis and GLYC for
    vars GLYC and GLYC;
    vars delta_GLYC_rxn12 and delta_GLYC_rxn12;
  enddef;
  def map between glycerol_synthesis and RES1 for
    vars RES1 and RES1;
  enddef;
  def map between PEP_synthesis and GAP for
    vars GAP and GAP;
    vars delta_GAP_rxn7 and delta_GAP_rxn7;
  enddef;
  def map between PEP_synthesis and PEP for
    vars PEP and PEP;
    vars delta_PEP_rxn7 and delta_PEP_rxn7;
  enddef;
  def map between PEP_synthesis and NAD for
    vars NAD and NAD;
    vars delta_NAD_rxn7 and delta_NAD_rxn7;
  enddef;
  def map between PEP_synthesis and NADH for
    vars NADH and NADH;
    vars delta_NADH_rxn7 and delta_NADH_rxn7;
  enddef;
  def map between PEP_synthesis and RES2 for
    vars RES2 and RES2;
  enddef;
  def map between PEP_dephosphorylation and PEP for
    vars PEP and PEP;
    vars delta_PEP_rxn8 and delta_PEP_rxn8;
  enddef;
  def map between PEP_dephosphorylation and Pyr for
    vars Pyr and Pyr;
    vars delta_Pyr_rxn8 and delta_Pyr_rxn8;
  enddef;
  def map between PEP_dephosphorylation and ATP for
    vars ATP and ATP;
    vars delta_ATP_rxn8 and delta_ATP_rxn8;
  enddef;
  def map between PEP_dephosphorylation and ADP for
    vars ADP and ADP;
    vars delta_ADP_rxn8 and delta_ADP_rxn8;
  enddef;
  def map between PEP_dephosphorylation and FBP for
    vars FBP and FBP;
  enddef;
  def map between PEP_dephosphorylation and PK for
    vars PK and PK;
  enddef;
  def map between pyruvate_decarboxylation and Pyr for
    vars Pyr and Pyr;
    vars delta_Pyr_rxn9 and delta_Pyr_rxn9;
  enddef;
  def map between pyruvate_decarboxylation and ALD for
    vars ALD and ALD;
    vars delta_ALD_rxn9 and delta_ALD_rxn9;
  enddef;
  def map between pyruvate_decarboxylation and PDC for
    vars PDC and PDC;
  enddef;
  def map between monomeric_building_block_synthesis and Pyr for
    vars Pyr and Pyr;
    vars delta_Pyr_rxn14b and delta_Pyr_rxn14b;
  enddef;
  def map between monomeric_building_block_synthesis and G6P for
    vars G6P and G6P;
    vars delta_G6P_rxn14a and delta_G6P_rxn14a;
  enddef;
  def map between monomeric_building_block_synthesis and ATP_for_biosynthesis for
    vars r_SYNT1 and r_SYNT1;
    vars r_SYNT2 and r_SYNT2;
  enddef;
  def map between monomeric_building_block_synthesis and ATP for
    vars ATP and ATP;
    vars delta_ATP_rxn14a and delta_ATP_rxn14a;
    vars delta_ATP_rxn14b and delta_ATP_rxn14b;
  enddef;
  def map between monomeric_building_block_synthesis and Monomeric_building_blocks for
    vars Monomeric_building_blocks and Monomeric_building_blocks;
    vars delta_Monomeric_building_blocks_rxn14a and delta_Monomeric_building_blocks_rxn14a;
    vars delta_Monomeric_building_blocks_rxn14b and delta_Monomeric_building_blocks_rxn14b;
  enddef;
  def map between alcohol_dehydrogenation and ALD for
    vars ALD and ALD;
    vars delta_ALD_rxn10 and delta_ALD_rxn10;
  enddef;
  def map between alcohol_dehydrogenation and ETOH for
    vars ETOH and ETOH;
    vars delta_ETOH_rxn10 and delta_ETOH_rxn10;
  enddef;
  def map between alcohol_dehydrogenation and NADH for
    vars NADH and NADH;
    vars delta_NADH_rxn10 and delta_NADH_rxn10;
  enddef;
  def map between alcohol_dehydrogenation and ADH for
    vars ADH and ADH;
  enddef;
  def map between acetaldehyde_dehydrogenation and ALD for
    vars ALD and ALD;
    vars delta_ALD_rxn11 and delta_ALD_rxn11;
  enddef;
  def map between acetaldehyde_dehydrogenation and Ac for
    vars Ac and Ac;
    vars delta_Ac_rxn11 and delta_Ac_rxn11;
  enddef;
  def map between acetaldehyde_dehydrogenation and ALDH for
    vars ALDH and ALDH;
  enddef;
  def map between ATP_synthesis and AMP for
    vars AMP and AMP;
    vars delta_AMP_rxn17 and delta_AMP_rxn17;
  enddef;
  def map between ATP_synthesis and ADP for
    vars ADP and ADP;
    vars delta_ADP_rxn17 and delta_ADP_rxn17;
  enddef;
  def map between ATP_synthesis and ATP for
    vars ATP and ATP;
    vars delta_ATP_rxn17 and delta_ATP_rxn17;
  enddef;
  def map between ATP_synthesis and ADK for
    vars ADK and ADK;
  enddef;
  def map between triosephosphate_isomerisation and GAP for
    vars GAP and GAP;
    vars delta_GAP_rxn6 and delta_GAP_rxn6;
  enddef;
  def map between triosephosphate_isomerisation and DHAP for
    vars DHAP and DHAP;
    vars delta_DHAP_rxn6 and delta_DHAP_rxn6;
  enddef;
  def map between triosephosphate_isomerisation and TIS for
    vars TIS and TIS;
  enddef;
  def map between ATP_ADP_translocation and ATP for
    vars ATP and ATP;
    vars delta_ATP_rxn15 and delta_ATP_rxn15;
  enddef;
  def map between ATP_ADP_translocation and ADP for
    vars ADP and ADP;
    vars delta_ADP_rxn15 and delta_ADP_rxn15;
  enddef;
  def map between ATP_ADP_translocation and ATP_M for
    vars ATP_M and ATP_M;
    vars delta_ATP_M_rxn15 and delta_ATP_M_rxn15;
  enddef;
  def map between ATP_ADP_translocation and ADP_M for
    vars ADP_M and ADP_M;
    vars delta_ADP_M_rxn15 and delta_ADP_M_rxn15;
  enddef;
  def map between ATP_ADP_translocation and TR_ADP for
    vars TR_ADP and TR_ADP;
  enddef;
  def map between ATP_ADP_translocation and TR_ATP for
    vars TR_ATP and TR_ATP;
  enddef;
  def map between ATP_for_biosynthesis and ATP for
    vars ATP and ATP;
    vars delta_ATP_rxn20 and delta_ATP_rxn20;
  enddef;
  def map between ATP_for_biosynthesis and ATP_G for
    vars ATP_G and ATP_G;
    vars delta_ATP_G_rxn20 and delta_ATP_G_rxn20;
  enddef;
  def map between pyruvate_dehydrogenation and Pyr_M for
    vars Pyr_M and Pyr_M;
    vars delta_Pyr_M_rxn13 and delta_Pyr_M_rxn13;
  enddef;
  def map between pyruvate_dehydrogenation and NAD_M for
    vars NAD_M and NAD_M;
    vars delta_NAD_M_rxn13 and delta_NAD_M_rxn13;
  enddef;
  def map between pyruvate_dehydrogenation and NADH_M for
    vars NADH_M and NADH_M;
    vars delta_NADH_M_rxn13 and delta_NADH_M_rxn13;
  enddef;
  def map between pyruvate_dehydrogenation and PDH for
    vars PDH and PDH;
  enddef;
  def map between global_variables and Glc for
    vars time and time;
  enddef;
  def map between global_variables and Glc_C for
    vars time and time;
  enddef;
  def map between global_variables and G6P for
    vars time and time;
  enddef;
  def map between global_variables and F6P for
    vars time and time;
  enddef;
  def map between global_variables and FBP for
    vars time and time;
  enddef;
  def map between global_variables and Monomeric_building_blocks for
    vars time and time;
  enddef;
  def map between global_variables and GAP for
    vars time and time;
  enddef;
  def map between global_variables and DHAP for
    vars time and time;
  enddef;
  def map between global_variables and GLYC for
    vars time and time;
  enddef;
  def map between global_variables and PEP for
    vars time and time;
  enddef;
  def map between global_variables and Pyr for
    vars time and time;
  enddef;
  def map between global_variables and ALD for
    vars time and time;
  enddef;
  def map between global_variables and ETOH for
    vars time and time;
  enddef;
  def map between global_variables and Ac for
    vars time and time;
  enddef;
  def map between global_variables and ATP for
    vars time and time;
  enddef;
  def map between global_variables and ATP_G for
    vars time and time;
  enddef;
  def map between global_variables and ADP for
    vars time and time;
  enddef;
  def map between global_variables and AMP for
    vars time and time;
  enddef;
  def map between global_variables and NAD for
    vars time and time;
  enddef;
  def map between global_variables and NADH for
    vars time and time;
  enddef;
  def map between global_variables and ATP_M for
    vars time and time;
  enddef;
  def map between global_variables and ADP_M for
    vars time and time;
  enddef;
  def map between global_variables and Pyr_M for
    vars time and time;
  enddef;
  def map between global_variables and NAD_M for
    vars time and time;
  enddef;
  def map between global_variables and NADH_M for
    vars time and time;
  enddef;
enddef;
// Glc
// title: Glc
// alternative: extracellular glucose
// Glc_C
// title: Glc_C
// alternative: cytosolic glucose
// G6P
// title: G6P
// alternative: glucose-6-phosphate
// F6P
// title: F6P
// alternative: fructose-6-phosphate
// GAP
// title: GAP
// alternative: glyceraldehyde-3-phosphate
// PEP
// title: PEP
// alternative: phosphoenol pyruvate
// Pyr
// title: Pyr
// alternative: (cytosolic) pyruvate
// Pyr_M
// title: Pyr_M
// alternative: mitochondrial pyruvate
// ALD
// title: ALD
// alternative: acetaldehyde
// Ac
// title: Ac
// alternative: acetic acid
// FBP
// title: FBP
// alternative: fructose-1,6-bisphosphate
// DHAP
// title: DHAP
// alternative: dihydroxyacetone phosphate
// GLYC
// title: GLYC
// alternative: glycerol
// ETOH
// title: ETOH
// alternative: ethanol
// AMP
// title: AMP
// alternative: adenosine monophosphate
// NADH
// title: NADH
// alternative: (cytosolic) protonated nicotinamide adenine dinucleotide
// NADH_M
// title: NADH_M
// alternative: mitochondial protonated nicotinamide adenine dinucleotide
// NAD
// title: NAD
// alternative: (cytosolic) nicotinamide adenine dinucleotide
// NAD_M
// title: NAD_M
// alternative: mitochondrial nicotinamide adenine dinucleotide
// ATP
// title: ATP
// alternative: (cytosolic) adenosine triphosphate
// ATP_M
// title: ATP_M
// alternative: mitochondial adenosine triphosphate
// ATP_G
// title: ATP_G
// alternative: ATP consumption for anabolic reactions
// ADP
// title: ADP
// alternative: (cytosolic) adenosine diphosphate
// ADP_M
// title: ADP_M
// alternative: mitochondrial adenosine diphosphate
// PERM
// title: PERM
// alternative: permease
// HK
// title: HK
// alternative: hexokinase
// PGI
// title: PGI
// alternative: phosphoglucose isomerase
// PFK
// title: PFK
// alternative: phosphofructo-1-kinase
// ALDO
// title: ALDO
// alternative: fructose bisphosphate aldolase
// PK
// title: PK
// alternative: pyruvate kinase
// PDC
// title: PDC
// alternative: pyruvate decarboxylase
// ALDH
// title: ALDH
// alternative: acetaldehyde dehydrogenase
// ADH
// title: ADH
// alternative: alcohol dehydrogenase
// TIS
// title: TIS
// alternative: triose phosphate isomerase
// ADK
// title: ADK
// alternative: adenylate kinase
// TR_ATP
// title: TR_ATP
// alternative: adenosine triphosphate translocase
// TR_ADP
// title: TR_ADP
// alternative: adenosine diphosphate translocas
// PDH
// title: PDH
// alternative: pyruvate dehydrogenase
// RES2
// title: RES2
// alternative: glyceraldehyde-3-phosphate dehydrogenase-phosphoglycerate kinase-phosphoglycerate mutase-enolase complex
// RES1
// title: RES1
// alternative: glycerol-3-phosphate dehydrogenase-glycerol-1-phosphatase enzyme complex
